CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:96
HasImagePlaneDetails:False

Images:[module_num:1|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notes:["Exclude the columns that don't have mitotractker/LAMP1", 'ALSO note for plate 7, r02 is weird (and c12 was a dupe)', 'for plate 5 and plate 6, c01 and c12 were lamin antibody tests; c11 and c12 for plate 3; c10 and c11 for plate 4', 'for plate 1 and 2 c07-11 were EEA1', 'For plate 4 there was no phalloidin, so DAPI is channel 3']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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "c12") (directory doesnot contain "old") (file doesnot contain "r02")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', "Can pre-match this to my metadata provided that Well, WellRow, WellColumn, and WellField are the same data type on the sheet (i.e. if one is string and the other is int then they don't match up)"]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Field>\d{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:ch(?P<Channels>\d{1})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "ch")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_rep(?P<PlateNumber>\d{2})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Cell_Masks': 'Well', 'DAPI': 'Well', 'DAPI_MAX': 'Well', 'LAMP1': 'Well', 'LAMP1_MAX': 'Well', 'MitoTracker': 'Well', 'MitoTracker_MAX': 'Well', 'Nuclei_Masks': 'Well', 'Phalloidin_MAX': 'Well', 'Phalloidin': 'Well'}, {'Cell_Masks': 'WellRow', 'DAPI': 'WellRow', 'DAPI_MAX': 'WellRow', 'LAMP1': None, 'LAMP1_MAX': 'WellRow', 'MitoTracker': 'WellRow', 'MitoTracker_MAX': 'WellRow', 'Nuclei_Masks': 'WellRow', 'Phalloidin_MAX': 'WellRow', 'Phalloidin': 'WellRow'}, {'Cell_Masks': 'WellColumn', 'DAPI': 'WellColumn', 'DAPI_MAX': 'WellColumn', 'LAMP1': 'WellColumn', 'LAMP1_MAX': 'WellColumn',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channels "4") (file does contain "MAX")
    Name to assign these images:DAPI_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channels "4") (file does contain "SUM")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channels "2") (file does contain "MAX")
    Name to assign these images:MitoTracker_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channels "2") (file does contain "SUM")
    Name to assign these images:MitoTracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channels "1") (file does contain "MAX")
    Name to assign these images:LAMP1_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channels "1") (file does contain "SUM")
    Name to assign these images:LAMP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "v2") (file does contain "cell") (file does contain "masks")
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    Name to assign these objects:Cell_Masks
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "nuclei") (file does contain "masks")
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    Name to assign these objects:Nuclei_Masks
    Select the image type:Objects
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    Select the rule criteria:and (metadata does Channels "3") (file does contain "SUM")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channels "3") (file does contain "MAX")
    Name to assign these images:Phalloidin_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramEqualization:[module_num:5|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
    Select the input image:DAPI_MAX
    Name the output image:EqualizationDAPI
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:128
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

HistogramEqualization:[module_num:6|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
    Select the input image:MitoTracker_MAX
    Name the output image:EqualizationMito
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:128
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

HistogramEqualization:[module_num:7|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
    Select the input image:Phalloidin_MAX
    Name the output image:EqualizationPhalloidin
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.02
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

HistogramEqualization:[module_num:8|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notes:['Also scale lysosomes']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
    Select the input image:LAMP1_MAX
    Name the output image:EqualizationLAMP1
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:128
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

ResizeObjects:[module_num:9|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notes:['Rescale cell masks']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
    Select the input object:Cell_Masks
    Name the output object:ResizeCellMasks
    Method:Match Image
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    Select the image with the desired dimensions:DAPI_MAX

ResizeObjects:[module_num:10|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notes:['Resize nuclear masks']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
    Select the input object:Nuclei_Masks
    Name the output object:ResizeNucleiMasks
    Method:Match Image
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    Select the image with the desired dimensions:DAPI_MAX

FilterObjects:[module_num:11|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notes:['Filter to remove nuclei touching borders']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
    Select the objects to filter:ResizeNucleiMasks
    Name the output objects:OrigFilteredNuclei
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
RelateObjects:[module_num:12|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notes:['Relate nuclei to the orignal cell objects and save the nuclei that belong to these cells', '']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
    Parent objects:ResizeCellMasks
    Child objects:OrigFilteredNuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:AllNuclei
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
ErodeObjects:[module_num:13|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notes:['Erode cell masks to make them reasonable', 'Use 10 if on the new cell masks']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
    Select the input object:ResizeCellMasks
    Name the output object:Eroded_Cell_Masks
    Structuring element:disk,15
    Prevent object removal:Yes
    Relabel resulting objects:No

ErodeObjects:[module_num:14|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notes:['Eroded nuc masks b/c they kind of small']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
    Select the input object:AllNuclei
    Name the output object:Eroded_AllNuclei_Masks
    Structuring element:disk,5
    Prevent object removal:Yes
    Relabel resulting objects:No

ErodeObjects:[module_num:15|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enabled:False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
    Select the input object:ResizeCellMasks
    Name the output object:Eroded_Cell_Masks_ForSecondaryObj
    Structuring element:disk,15
    Prevent object removal:Yes
    Relabel resulting objects:No

IdentifySecondaryObjects:[module_num:16|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notes:['Way to expand a little bit but does make pipeline take quite a bit longer']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enabled:False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
    Select the input objects:Eroded_Cell_Masks_ForSecondaryObj
    Name the objects to be identified:Watershedded_Eroded_Cell_Masks
    Select the method to identify the secondary objects:Distance - B
    Select the input image:EqualizationMito
    Number of pixels by which to expand the primary objects:35
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
FilterObjects:[module_num:17|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notes:['Filter cells out without nuclei or with multiple nuclei (positively) - in case I want to analyze these filtered-out cells']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
    Select the objects to filter:ResizeCellMasks
    Name the output objects:ValidCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_OrigFilteredNuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:18|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notes:['Multinuc cells']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
    Select the objects to filter:ResizeCellMasks
    Name the output objects:Multinucleate_Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_OrigFilteredNuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
FlagImage:[module_num:19|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notes:['Flag an image to remove images with no cells, no nuclei, or a tiny amount of cell area', 'Stops crashes when going to overlay objects']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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:EmptyImage_Cells
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
    Select the object to be used for flagging:Cell
    Which measurement?:Count_ResizeCellMasks
    Flag images based on low values?:Yes
    Minimum value:1.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Metadata
    Name the flag:EmptyImage_Nuclei
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_AllNuclei
    Flag images based on low values?:Yes
    Minimum value:1.0
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

EnforceObjectsOneToOne:[module_num:20|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notes:['Force cell and nuclei to be 1:1 to handle the cases where there are multiple nuclei / nuclei overlapping out of bounds. This will be the final cell/nuclei object set for our purposes']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
    Pre-primary objects:Eroded_AllNuclei_Masks
    Pre-secondary objects:Eroded_Cell_Masks
    Name the output primary object:Nuclei
    Name the output secondary object:Cell
    In module display, show enforced objects on a selected image?:Yes
    Select the image for visualization:MitoTracker_MAX

OverlayOutlines:[module_num:21|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notes:['Same as above but on a blank image to use for later if need be']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
    Display outlines on a blank image?:Yes
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    Name the output image:Segmentation_Overlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Thick
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    Select objects to display:Nuclei
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    Select objects to display:Cell

IdentifyTertiaryObjects:[module_num:22|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notes:['Cytoplasm - good to help with cytominer']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureImageQuality:[module_num:23|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:DAPI_MAX, LAMP1_MAX, MitoTracker_MAX
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
CorrectIlluminationCalculate:[module_num:24|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notes:['Correct mitotracker bg intensity']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enabled:False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
    Select the input image:MitoTracker_MAX
    Name the output image:Illum_MitoTracker
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:25|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notes:['Correct LAMP1 background intensity']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enabled:False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
    Select the input image:LAMP1_MAX
    Name the output image:Illum_LAMP1
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:26|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notes:['Apply bg subtraction functions']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enabled:False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
    Select the input image:MitoTracker_MAX
    Name the output image:CorrMitoTracker_MAX
    Select the illumination function:Illum_MitoTracker
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MedianFilter:[module_num:27|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notes:['FOR NEW  PIPELINE Part 1 of mito preprocessing']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
    Select the input image:MitoTracker_MAX
    Name the output image:CorrMitoMedianFilter
    Window:2

GaussianFilter:[module_num:28|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notes:['Part 2.1 of mito preprocessing: do a gaussian to be used for unsharp mask, radius = sigma']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
    Select the input image:MitoTracker_MAX
    Name the output image:MitoGaussianFilterForUnsharp
    Sigma:1

ImageMath:[module_num:29|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notes:['Part 2.2 of mito preprocessing, subtracting blurred from original and multiplying my the amount (weight)', 'enhanced image = original + amount * (original - blurred)']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:0.6
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MaskMitoForUnsharp
    Image or measurement?:Image
    Select the first image:CorrMitoMedianFilter
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MitoGaussianFilterForUnsharp
    Multiply the second image by:1.0
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
ImageMath:[module_num:30|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notes:['Part 2.3 of mito preprocessing, multiply mask to a factor (weight) and add back to original', 'enhanced image = original + amount * (original - blurred)']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MitoUnsharpMask
    Image or measurement?:Image
    Select the first image:CorrMitoMedianFilter
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MaskMitoForUnsharp
    Multiply the second image by:1.0
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
RunImageJMacro:[module_num:31|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notes:['Run macro for clahe and thresholding / skeletonizing']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
    Hidden:1
    Hidden:3
    Hidden:3
    Executable directory:Elsewhere...|/home/mattiazzilab/Fiji
    Executable:fiji-linux-x64
    Macro directory:Elsewhere...|/mnt/bigdisk1/AllieSpangaro/Scripts/imageJ_macros/ImageJ Scripts
    Macro:mitomeasure_cellprofiler.py
    What variable in your macro defines the folder ImageJ should use?:directory
    Select an image to send to your macro:MitoUnsharpMask
    What should this image temporarily saved as?:dummy.tiff
    What is the image filename CellProfiler should load?:preprocessed.tiff
    What should CellProfiler call the loaded image?:PreproMito
    What is the image filename CellProfiler should load?:threshmito.tiff
    What should CellProfiler call the loaded image?:ThreshMitoIJ
    What is the image filename CellProfiler should load?:skelmito.tiff
    What should CellProfiler call the loaded image?:MitoSkelIJ
    What variable name is your macro expecting?:clahe_block
    What value should this variable have?:128
    What variable name is your macro expecting?:clahe_bins
    What value should this variable have?:256
    What variable name is your macro expecting?:clahe_slope
    What value should this variable have?:9

RescaleIntensity:[module_num:32|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notes:['For display']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
    Select the input image:PreproMito
    Name the output image:RescaleIntensityPreproMito
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:33|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notes:['FOR NEW PIPELINE Use this to convert to binary and get rid of little bits; from IJ was somehow not binary']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enabled:False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
    Select the input image:MitoSkelIJ
    Name the primary objects to be identified:Skeleton_Object
    Typical diameter of objects, in pixel units (Min,Max):2,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:34|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notes:['Now make it back into a binary image']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enabled:False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
    Select the input objects:Skeleton_Object
    Name the output image:MitoSkel
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:35|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notes:['Version 1: Identify objects from the thresholded image - use manual threshold', 'See these for more info:', 'https://www.frontiersin.org/journals/physics/articles/10.3389/fphy.2022.855775/full', 'https://www.sciencedirect.com/science/article/pii/S2215016122000693?via%3Dihub#bib0011', 'https://pmc.ncbi.nlm.nih.gov/articles/PMC8560386/#sec2']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
    Select the input image:ThreshMitoIJ
    Name the primary objects to be identified:Original_MitochondriaObjects
    Typical diameter of objects, in pixel units (Min,Max):5,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:36|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notes:['And same for the thresh mito']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
    Select the input objects:Original_MitochondriaObjects
    Name the output image:ThreshMito
    Select the color format:Binary (black & white)
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
ExpandOrShrinkObjects:[module_num:37|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notes:['Add dividing lines between cells so we can mask out the mitochondria independently']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
    Select the input objects:Cell
    Name the output objects:DividingLinesCellMasks
    Select the operation:Add partial dividing lines between objects
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
MaskObjects:[module_num:38|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notes:['Mask mitochondria to break up those that are between cell boundaries']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enabled:False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
    Select objects to be masked:Original_MitochondriaObjects
    Name the masked objects:Masked_MitochondriaObjects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DividingLinesCellMasks
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

SplitOrMergeObjects:[module_num:39|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notes:['Split the masked mitochondria to make sure touching cells get their respective half of a big clump of mitochondria']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enabled:False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
    Select the input objects:Masked_MitochondriaObjects
    Name the new objects:Mitochondria_New
    Operation:Split
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
Closing:[module_num:40|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notes:['Closing to connect / bringe gaps between trunks that may have been split. Dilates, then erodes so that the "fuzzy" stuff is reduced', 'Then do the same as above']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
    Select the input image:ThreshMito
    Name the output image:ClosingMito
    Structuring element:Disk,2

IdentifyPrimaryObjects:[module_num:41|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notes:['Getting the closing objects to save']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
    Select the input image:ClosingMito
    Name the primary objects to be identified:Mitochondria_Closing
    Typical diameter of objects, in pixel units (Min,Max):5,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
MaskObjects:[module_num:42|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notes:['Apply a mask to on closing']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
    Select objects to be masked:Mitochondria_Closing
    Name the masked objects:Masked_Mitochondria_Closing
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DividingLinesCellMasks
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

SplitOrMergeObjects:[module_num:43|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notes:['Note that the final one is called "Mitochonria Closed" aka it got participled haha', 'For final version just call this mitochondria']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
    Select the input objects:Masked_Mitochondria_Closing
    Name the new objects:Mitochondria
    Operation:Split
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
MorphologicalSkeleton:[module_num:44|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notes:['Make closed skel']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
    Select the input image:ClosingMito
    Name the output image:MitoSkel_Closed

MaskImage:[module_num:45|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notes:['Mask the skeleton image to only measure within cells']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
    Select the input image:MitoSkel_Closed
    Name the output image:Mask_MitoSkel
    Use objects or an image as a mask?:Objects
    Select object for mask:DividingLinesCellMasks
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    Invert the mask?:No

MaskImage:[module_num:46|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notes:['For non-closed']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enabled:False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
    Select the input image:MitoSkel
    Name the output image:Mask_MitoSkel_NonClosed
    Use objects or an image as a mask?:Objects
    Select object for mask:DividingLinesCellMasks
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    Invert the mask?:No

MeasureObjectSkeleton:[module_num:47|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notes:['Version with the nucseed']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
    Select the seed objects:Nuclei
    Select the skeletonized image:Mask_MitoSkel
    Retain the branchpoint image?:Yes
    Name the branchpoint image:SkeletonAnalysis_Nucleus
    Fill small holes?:Yes
    Maximum hole size:30
    Export the skeleton graph relationships?:No
    Intensity image:EnhancedMito
    File output directory:Default Output Folder|skeleton
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSkeleton:[module_num:48|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notes:['Also for non-closing mito']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enabled:False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
    Select the seed objects:Nuclei
    Select the skeletonized image:Mask_MitoSkel_NonClosed
    Retain the branchpoint image?:Yes
    Name the branchpoint image:SkeletonAnalysis_Nucleus_NonClosing
    Fill small holes?:Yes
    Maximum hole size:30
    Export the skeleton graph relationships?:No
    Intensity image:EnhancedMito
    File output directory:Default Output Folder|skeleton
    Vertex file name:vertices.csv
    Edge file name:edges.csv

OverlayOutlines:[module_num:49|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notes:['Now show the closed mito']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityPreproMito
    Name the output image:Outlined_Mitochondria_Closing
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#59CF66
    Select objects to display:Nuclei
    Select outline color:#FF7D89
    Select objects to display:Mitochondria
    Select outline color:#59CF66
    Select objects to display:Cell

EnhanceOrSuppressFeatures:[module_num:50|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notes:['FOR LYSOSOME SEGMENTATION Enhance lyso puncta']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
    Select the input image:EqualizationLAMP1
    Name the output image:EnhancedLAMP1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
Smooth:[module_num:51|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notes:['Filter the puncta']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
    Select the input image:EnhancedLAMP1
    Name the output image:SmoothLAMP1Puncta
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Smooth:[module_num:52|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notes:['Smooth the lysososomes themselves']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
    Select the input image:EqualizationLAMP1
    Name the output image:SmoothEqualizedLAMP1
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
MaskImage:[module_num:53|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notes:['Mask the smoothed original lamp1 image']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
    Select the input image:SmoothEqualizedLAMP1
    Name the output image:MaskSmoothEqualizedLAMP1
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

MaskImage:[module_num:54|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notes:['Mask lysosomes to only measure within cells']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
    Select the input image:SmoothLAMP1Puncta
    Name the output image:MaskLAMP1Puncta
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:55|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notes:['Find lyso puncta']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
    Select the input image:MaskLAMP1Puncta
    Name the primary objects to be identified:LysosomePuncta
    Typical diameter of objects, in pixel units (Min,Max):3,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:20000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifySecondaryObjects:[module_num:56|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notes:['Expand the lysosomes by propagation using puncta as seeds; not 100% accurate but it its what it is', "Don't filter touching edge, will get rid of too much"]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
    Select the input objects:LysosomePuncta
    Name the objects to be identified:Lysosomes
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskSmoothEqualizedLAMP1
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    Regularization factor:3
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:57|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notes:['Overlay Lysosomes']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EqualizationLAMP1
    Name the output image:Outlined_Lysosomes
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#59CF66
    Select objects to display:Nuclei
    Select outline color:#FF7D89
    Select objects to display:Lysosomes
    Select outline color:#59CF66
    Select objects to display:Cell

RescaleIntensity:[module_num:58|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notes:['Divide by the maximum value of 7 16-bit images summed together (for a sum  projection over 7 z slices) ', '65535*7=458745 to rescale to 01']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
    Select the input image:LAMP1
    Name the output image:RescaleIntensityLAMP1
    Rescaling method:Divide each image by the same value
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    Divisor value:458745
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
RescaleIntensity:[module_num:59|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notes:['Rescale mitotracker to 01']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
    Select the input image:MitoTracker
    Name the output image:RescaleIntensityMitoTracker
    Rescaling method:Divide each image by the same value
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    Divisor value:458745
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
RescaleIntensity:[module_num:60|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notes:['Dapi to 01']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
    Select the input image:DAPI
    Name the output image:RescaleIntensityDAPI
    Rescaling method:Divide each image by the same value
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    Divisor value:458745
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
MeasureGranularity:[module_num:61|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notes:['Granularity; also do it for the mito binary image as in https://pmc.ncbi.nlm.nih.gov/articles/PMC9026914/#sec0003', 'For nuc']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
    Select images to measure:DAPI_MAX, LAMP1_MAX, MitoTracker_MAX
    Measure within objects?:Yes
    Select objects to measure:Cell, Cytoplasm
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:62|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notes:['Nuc intensity - max']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
    Select images to measure:DAPI_MAX
    Select objects to measure:Cell, Cytoplasm, Nuclei

MeasureObjectIntensity:[module_num:63|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notes:['Mito intensity - max']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
    Select images to measure:MitoTracker_MAX
    Select objects to measure:Cell, Cytoplasm, Mitochondria, Nuclei

MeasureObjectIntensity:[module_num:64|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notes:['Lyso intensity - max']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
    Select images to measure:LAMP1_MAX
    Select objects to measure:Cell, Cytoplasm, Lysosomes, Nuclei

MeasureObjectIntensity:[module_num:65|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notes:['nuc intensity - sum']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enabled:False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
    Select images to measure:DAPI
    Select objects to measure:Cell, Cytoplasm, Nuclei

MeasureObjectIntensity:[module_num:66|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notes:['mito intensity - sum']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enabled:False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
    Select images to measure:MitoTracker
    Select objects to measure:Cell, Cytoplasm, Mitochondria, Nuclei

MeasureObjectIntensity:[module_num:67|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notes:['Lyso intensity - sum']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enabled:False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
    Select images to measure:LAMP1
    Select objects to measure:Cell, Cytoplasm, Lysosomes, Nuclei

MeasureObjectIntensityDistribution:[module_num:68|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notes:['Measure intensity distribution with 4 bins of nuclei and cytoplasm']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
    Select images to measure:DAPI_MAX, LAMP1, LAMP1_MAX, MitoTracker_MAX
    Hidden:2
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
    Select objects to use as centers:Cell
    Scale the bins?:Yes
    Number of bins:4
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    Image:MitoTracker_MAX
    Objects to display:Cytoplasm
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:No
    Output image name:Heatmap

MeasureObjectIntensityDistribution:[module_num:69|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notes:['Measure intesnity dist using edge of the nucleus as the center - to avoid the size of the nucleus messing with the distribution']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
    Select images to measure:ClosingMito, DAPI_MAX, LAMP1, LAMP1_MAX, MitoTracker_MAX
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:4
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    Image:MitoTracker_MAX
    Objects to display:Cell
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:No
    Output image name:Heatmap

MeasureObjectSizeShape:[module_num:70|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notes:['Areas']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
    Select object sets to measure:Cell, Cytoplasm, Lysosomes, Mitochondria, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:71|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notes:['Neighbours - within 5 px']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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:72|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notes:['Neighbours - within 1 px']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enabled:False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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:73|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notes:['Nuc neighbours - within 1 px']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:74|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notes:['Mitotracker Texture', 'Adding more as in cell painting https://github.com/broadinstitute/imaging-platform-pipelines/blob/master/JUMP_production/JUMP_analysis_v3.cppipe']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
    Select images to measure:DAPI_MAX, LAMP1_MAX, MitoTracker_MAX
    Select objects to measure:Cell, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

MeasureColocalization:[module_num:75|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notes:['Mito and lyso colocalization']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
    Select images to measure:RescaleIntensityDAPI, RescaleIntensityLAMP1, RescaleIntensityMitoTracker
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cell, Cytoplasm, Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureObjectOverlap:[module_num:76|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notes:['MitoLyso overlap']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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:Mitochondria
    Select the objects to be tested for overlap against the ground truth:Lysosomes
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

CalculateMoments:[module_num:77|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notes:['Calculate Kurtosis or spread of the mitochondria within a cell', '-Runs quickly, might as well run all of them lol']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
    Hidden:2
    Hidden:1
    Select an image to measure:RescaleIntensityMitoTracker
    Select an image to measure:MitoTracker_MAX
    Select objects to measure:Cell
    Moments to compute:Mean,Standard Deviation,Skewness,Kurtosis

CalculateMoments:[module_num:78|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notes:['Calculate Kurtosis or spread of the lysosomes within a cell  ', '- Might as well do everything lol']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
    Hidden:2
    Hidden:1
    Select an image to measure:RescaleIntensityLAMP1
    Select an image to measure:LAMP1_MAX
    Select objects to measure:Cell
    Moments to compute:Mean,Standard Deviation,Skewness,Kurtosis

RelateObjects:[module_num:79|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notes:['Relate filtered cells to the filtered nuclei objects (for the non-enforced set)']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enabled:False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
    Parent objects:Multinucleate_Cells
    Child objects:AllNuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:80|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notes:['Calculate cell/nuc distances with relate objects']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enabled:False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
    Parent objects:Cell
    Child objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:81|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notes:['Relate cell to closed mito so we can get some stats']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
    Parent objects:Cell
    Child objects:Mitochondria
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:82|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notes:['Relate lyso to cell']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
    Parent objects:Cell
    Child objects:Lysosomes
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Do you want to save the children with parents as a new object set?:No
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    Parent name:Nuclei

RelateObjects:[module_num:83|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notes:['Do the same for cytoplasm']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
    Parent objects:Cytoplasm
    Child objects:Mitochondria
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:84|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notes:['Relate lyso to cyto']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
    Parent objects:Cytoplasm
    Child objects:Lysosomes
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Do you want to save the children with parents as a new object set?:No
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    Parent name:Nuclei

SplitOrMergeObjects:[module_num:85|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notes:['For other type too']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
    Select the input objects:Mitochondria
    Name the new objects:TotalMitochondria
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

SplitOrMergeObjects:[module_num:86|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notes:['Merge all into one lyso object per cell (but keep disconnected)']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
    Select the input objects:Lysosomes
    Name the new objects:TotalLysosomes
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:87|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notes:['Measure total mito/lyso mass per cell']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
    Select object sets to measure:TotalLysosomes, TotalMitochondria
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

SaveCroppedObjects:[module_num:88|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notes:['save each mask of combined mito per cell into a folder so that we can use the imageJ skeletonize (if its better)']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
    Do you want to save cropped images or object masks?:Masks
    Objects:TotalMitochondria
    Directory:Default Output Folder sub-folder|mito_masks
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:MitoTracker_MAX
    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:MitoTracker_MAX

SaveCroppedObjects:[module_num:89|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notes:['for lysosomes too']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
    Do you want to save cropped images or object masks?:Masks
    Objects:TotalLysosomes
    Directory:Default Output Folder sub-folder|lyso_masks
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:LAMP1_MAX
    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:MitoTracker_MAX

SaveImages:[module_num:90|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notes:['Save nucleus skeleton image']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
    Select the type of image to save:Image
    Select the image to save:SkeletonAnalysis_Nucleus
    Select method for constructing file names:From image filename
    Select image name for file prefix:MitoTracker_MAX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucSkelClosing
    Saved file format:png
    Output file location:Default Output Folder sub-folder|skeletons
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:91|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notes:['Save mito outlines']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
    Select the type of image to save:Image
    Select the image to save:Outlined_Mitochondria_Closing
    Select method for constructing file names:From image filename
    Select image name for file prefix:MitoTracker_MAX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MitoOutlineClosing
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:92|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notes:['Save lyso outliunes']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
    Select the type of image to save:Image
    Select the image to save:Outlined_Lysosomes
    Select method for constructing file names:From image filename
    Select image name for file prefix:LAMP1_MAX
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_LysoOutline
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:Segmentation_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI_MAX
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:94|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:95|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notes:['Export to database - BE CAREFUL if making a cpanalyst properties file; it will shit the bed if there is a missing metadata']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:output.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cell,Cytoplasm,Nuclei,TotalLysosomes,TotalMitochondria
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Morphology_ReplicativeAging_R5
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    Export object relationships?:No
    Overwrite without warning?:Data only
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToDatabase:[module_num:96|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notes:['Export the extra features ']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:extra_features.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Lysosomes,Mitochondria
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Morphology_ReplicativeAging_R6
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    Export object relationships?:No
    Overwrite without warning?:Data only
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    Create a CellProfiler Analyst workspace file?:No
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