CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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notes:["Exclude the columns that don't have mitotractker/LAMP1"]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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "c11") (file doesnot contain "c12")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Field>\d{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:ch(?P<ChannelNumber>\d{1})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "ch")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Cell_Masks': 'Well', 'DAPI_MAX': 'Well', 'LAMP1_MAX': 'Well', 'MitoTracker_MAX': 'Well', 'Nuclei_Masks': 'Well', 'Phalloidin_MAX': 'Well'}, {'Cell_Masks': 'WellRow', 'DAPI_MAX': 'WellRow', 'LAMP1_MAX': 'WellRow', 'MitoTracker_MAX': None, 'Nuclei_Masks': 'WellRow', 'Phalloidin_MAX': 'WellRow'}, {'Cell_Masks': 'WellColumn', 'DAPI_MAX': 'WellColumn', 'LAMP1_MAX': 'WellColumn', 'MitoTracker_MAX': 'WellColumn', 'Nuclei_Masks': 'WellColumn', 'Phalloidin_MAX': 'WellColumn'}, {'Cell_Masks': 'Field', 'DAPI_MAX': 'Field', 'LAMP1_MAX': 'Field', 'MitoTracker_MAX': 'Field', 'Nuclei_Masks': 'Field',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
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch4") (file does contain "MAX")
    Name to assign these images:DAPI_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2") (file does contain "MAX")
    Name to assign these images:MitoTracker_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch1") (file does contain "MAX")
    Name to assign these images:LAMP1_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "v2") (file does contain "cell") (file does contain "masks")
    Name to assign these images:Cell_Masks
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuclei") (file does contain "masks")
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    Name to assign these objects:Nuclei_Masks
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ChannelNumber "3") (file does contain "MAX")
    Name to assign these images:Phalloidin_MAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['Resize the cell masks that were imported as images at a 0.25 scale to their original image scale']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
    Select the input image:Cell_Masks
    Name the output image:ResizeCellMasks
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:MitoTracker_MAX
    Additional image count:0

Closing:[module_num:6|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notes:['Use a disk to get rid of jagged edge from rescaled segmentation']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
    Select the input image:ResizeCellMasks
    Name the output image:Closed_CellMasks
    Structuring element:Disk,10

MedianFilter:[module_num:7|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notes:['Preprocess cells to remove artifacts without changing labels']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
    Select the input image:Closed_CellMasks
    Name the output image:SmoothCellMasks
    Window:20

ConvertImageToObjects:[module_num:8|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notes:['Get the labels from cell masks image']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
    Select the input image:SmoothCellMasks
    Name the output object:Converted_Cell_Masks
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ResizeObjects:[module_num:9|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notes:['Resize nuclear masks']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
    Select the input object:Nuclei_Masks
    Name the output object:ResizeNuc
    Method:Match Image
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    Select the image with the desired dimensions:DAPI_MAX

FilterObjects:[module_num:10|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notes:['Filter to remove nuclei touching borders']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
    Select the objects to filter:ResizeNuc
    Name the output objects:OrigFilteredNuclei
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
RelateObjects:[module_num:11|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notes:['Relate nuclei to the orignal cell objects and save the nuclei that belong to these cells', 'This will be the final nuclei object set']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
    Parent objects:Converted_Cell_Masks
    Child objects:OrigFilteredNuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei
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
FilterObjects:[module_num:12|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notes:['Filter cells out without nuclei - retain only cells with at least one nucleus', 'This should be the final cell']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
    Select the objects to filter:Converted_Cell_Masks
    Name the output objects:Cell
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedCells
    Select the measurement to filter by:Children_OrigFilteredNuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['Measure Size and shape for cells ', "- Do this before we relate objects , don't need to do it again for the parent cells"]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
    Select object sets to measure:Cell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FlagImage:[module_num:14|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notes:['Flag an image to remove images with no cells, no nuclei, or a tiny amount of cell area']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
    Hidden:3
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:EmptyImage_Cells
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
    Select the object to be used for flagging:Cell
    Which measurement?:Count_Cell
    Flag images based on low values?:Yes
    Minimum value:1.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Metadata
    Name the flag:EmptyImage_Nuclei
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_Nuclei
    Flag images based on low values?:Yes
    Minimum value:1.0
    Flag images based on high values?:No
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    Hidden:1
    Name the flag's category:Metadata
    Name the flag:CellSizeFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Average measurement for all objects in each image
    Select the object to be used for flagging:Cell
    Which measurement?:AreaShape_Area
    Flag images based on low values?:Yes
    Minimum value:8000
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

HistogramEqualization:[module_num:15|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notes:['Equalize to enhance brighness and aid object detection']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
    Select the input image:MitoTracker_MAX
    Name the output image:EqualizationMito
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

HistogramEqualization:[module_num:16|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
    Select the input image:LAMP1_MAX
    Name the output image:EqualizationLAMP1
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:10
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

HistogramEqualization:[module_num:17|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
    Select the input image:DAPI_MAX
    Name the output image:EqualizationDAPI
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:10
    Clip limit:0.01
    Is your image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

HistogramMatching:[module_num:18|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
    Select the input image:EqualizationMito
    Name the output image:HistogramMatchingMito
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :EqualizationLAMP1
    Frame number:5

Smooth:[module_num:19|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enabled:False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
    Select the input image:DAPI_MAX
    Name the output image:SmoothNuc
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
ImageMath:[module_num:20|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notes:['Make a composite for 2* objects to find and for visualization']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:EqualizationMito
    Multiply the first image by:2.0
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    Image or measurement?:Image
    Select the second image:EqualizationLAMP1
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:DAPI_MAX
    Multiply the third image by:1.0
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
Smooth:[module_num:21|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notes:['Smooth the compsosite']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
    Select the input image:ImageAfterMath
    Name the output image:SmoothCellOutline
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
OverlayObjects:[module_num:22|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enabled:False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
    Input:SmoothCellOutline
    Name the output image:OverlayObjects
    Objects:ResizeCell
    Opacity:0.3

IdentifyTertiaryObjects:[module_num:23|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notes:['Cytoplasm - good to help with cytominer']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskImage:[module_num:24|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notes:['Mask MitoTracker to only measure within cells']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
    Select the input image:EqualizationMito
    Name the output image:MaskMitoTracker
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

MaskImage:[module_num:25|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notes:['Mask lysosomes to only measure within cells']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
    Select the input image:EqualizationLAMP1
    Name the output image:MaskLAMP1
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:26|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notes:['Enhance lyso puncta']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
    Select the input image:MaskLAMP1
    Name the output image:EnhancedLAMP1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
Smooth:[module_num:27|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notes:['Filter the puncta']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
    Select the input image:EnhancedLAMP1
    Name the output image:SmoothLAMP1Puncta
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:28|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notes:['Find lyso puncta']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
    Select the input image:SmoothLAMP1Puncta
    Name the primary objects to be identified:LysosomePuncta
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:20000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Smooth:[module_num:29|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notes:['Smooth the lysososomes themselves']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
    Select the input image:MaskLAMP1
    Name the output image:SmoothEqualizedLAMP1
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifySecondaryObjects:[module_num:30|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notes:['Expand the lysosomes by propagation using puncta as seeds; not super accurate']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
    Select the input objects:LysosomePuncta
    Name the objects to be identified:Lysosomes
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothEqualizedLAMP1
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    Regularization factor:3
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:31|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notes:['Now enhance the neurites']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
    Select the input image:MaskMitoTracker
    Name the output image:EnhancedMito
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Smooth:[module_num:32|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notes:['Clean up the enhanced neurite image']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
    Select the input image:EnhancedMito
    Name the output image:SmoothMitoNetwork
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
Threshold:[module_num:33|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notes:['Threshold the mito for segmentation of network']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
    Select the input image:SmoothMitoNetwork
    Name the output image:ThresholdMito
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:25
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:34|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notes:['Identify objects from the thresholded image - use manual threshold']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
    Select the input image:ThresholdMito
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):3,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:40
    Suppress local maxima that are closer than this minimum allowed distance:40
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:20000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
GrayToColor:[module_num:35|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorCell
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    Hidden:1
    Image name:EqualizationDAPI
    Color:#00E3FF
    Weight:2

GrayToColor:[module_num:36|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorMito
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    Hidden:2
    Image name:EqualizationDAPI
    Color:#54BEFF
    Weight:2.5
    Image name:EqualizationMito
    Color:white
    Weight:4.0

GrayToColor:[module_num:37|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorLyso
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    Hidden:2
    Image name:EqualizationDAPI
    Color:#54BEFF
    Weight:2.5
    Image name:EqualizationLAMP1
    Color:white
    Weight:1

Resize:[module_num:38|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
    Select the input image:ColorCell
    Name the output image:LittleColorCell
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Bicubic
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    Additional image count:0

Resize:[module_num:39|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
    Select the input image:ColorMito
    Name the output image:LittleColorMito
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Bicubic
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    Additional image count:0

Resize:[module_num:40|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
    Select the input image:EqualizationLAMP1
    Name the output image:LittleColorLyso
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Bicubic
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    Additional image count:0

ResizeObjects:[module_num:41|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
    Select the input object:Cell
    Name the output object:LittleCell
    Method:Factor
    X Factor:0.5
    Y Factor:0.5
    Z Factor:0.5
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
ResizeObjects:[module_num:42|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
    Select the input object:Nuclei
    Name the output object:LittleNuc
    Method:Factor
    X Factor:0.5
    Y Factor:0.5
    Z Factor:0.5
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
ResizeObjects:[module_num:43|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
    Select the input object:Mitochondria
    Name the output object:LittleMito
    Method:Factor
    X Factor:0.5
    Y Factor:0.5
    Z Factor:0.5
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
ResizeObjects:[module_num:44|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
    Select the input object:Lysosomes
    Name the output object:LittleLyso
    Method:Factor
    X Factor:0.5
    Y Factor:0.5
    Z Factor:0.5
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
Resize:[module_num:45|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
    Select the input image:HistogramMatchingMito
    Name the output image:LittleMitoImg
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:0.5
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    Interpolation method:Bicubic
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    Additional image count:0

OverlayOutlines:[module_num:46|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LittleColorCell
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF6462
    Select objects to display:LittleNuc
    Select outline color:#00FF87
    Select objects to display:LittleCell

SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cell_Masks
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:48|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notes:['Image for lyso/nuc outlines on lyso image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LittleColorLyso
    Name the output image:OutlinedLyso
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00FF87
    Select objects to display:LittleNuc
    Select outline color:#FF6462
    Select objects to display:LittleLyso
    Select outline color:#00FF87
    Select objects to display:LittleCell

OverlayOutlines:[module_num:49|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notes:['Show cell/nuc/mito outlines on cell image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LittleMitoImg
    Name the output image:OutlinedMito
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00FF87
    Select objects to display:LittleNuc
    Select outline color:#FF6462
    Select objects to display:LittleMito
    Select outline color:#00FF87
    Select objects to display:LittleCell

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:OutlinedLyso
    Select method for constructing file names:From image filename
    Select image name for file prefix:LAMP1_MAX
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:OutlinedMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:MitoTracker_MAX
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:52|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notes:['Relate filtered cells to the filtered nuclei objects']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
    Parent objects:Cell
    Child objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:53|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notes:['Relate lyso to cyto']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
    Parent objects:Cell
    Child objects:Lysosomes
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Do you want to save the children with parents as a new object set?:No
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    Parent name:Nuclei

RelateObjects:[module_num:54|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notes:['Relate mito to cyto']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
    Parent objects:Cell
    Child objects:Mitochondria
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Do you want to save the children with parents as a new object set?:No
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    Parent name:Nuclei
